PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = poster_demo
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Poster
    RoutineSettingsComponent Poster
      stopVal [duration (s)] = 30
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    ImageComponent poster_scam
      image = goisadvisorycsa-800.jpg
      size = (0.7, 0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    AprilTagFrameComponent tagFrame
      anchor = center
      contrast = 1
      h_count = 4
      marker_size = 0.125
      marker_units = from exp settings
      pos = (0, 0)
      size = [2, 2]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      units = norm
      v_count = 3
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  Routine Finish
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    TextComponent End
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 7
      text = Thank you for participating
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    PolygonComponent distractor_end
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      units = deg
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  Routine Start
    RoutineSettingsComponent Start
      stopVal [duration (s)] = 5.5
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    TextComponent Ready
      draggable = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Get ready...
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    PolygonComponent distractor
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      units = deg
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    AprilTagFrameComponent tag_Frame_start
      anchor = center
      contrast = 1
      h_count = 4
      marker_size = 0.125
      marker_units = from exp settings
      pos = (0, 0)
      size = [2, 2]
      startVal [time (s)] = 0.5
      syncScreenRefresh = True
      units = norm
      v_count = 3
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Flow
  Routine Start
  Routine Poster
  Routine Finish
